PsychoPy2experiment version="2021.1.2"
Settings
  Audio lib = sounddevice
  Data filename = u'data/{}_sub-{}_ses-{}_{}'.format(expName, expInfo['participant'], expInfo['session'].zfill(3), data.getDateStr(format="%Y-%m-%d-%H%M%S"))
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = MNS-stim
  logging level = data
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Routines
  Routine test_pulse
    TextComponent TestPulseText
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        8: send eight test pulses
        1: send one test pulse

        p: begin protocol
        5: skip to first 5-minute "ON" run
        E: exit
    KeyboardComponent key_resp_test
      allowedKeys = 'e','8','1','5','p'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent testPulseCode
      Code Type = Auto->JS
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      Begin Routine:
        print('TEST PULSE ROUTINE')
        testPulsesLastRT = 0.0
      Each Frame:
        for key in key_resp_test.keys:
            if 't' in key:
                doTestPulse=int(1)
            elif 'p' in key:
                doOneMinRunReady=int(1)
                continueRoutine = False
            elif '5' in key:
                doOnOffFiveMinRuns=int(1)
                blockCounter = 5
                continueRoutine = False
            elif 'e' in key:
                doExit=int(1)
                continueRoutine = False
            elif '8' in key:
                if key_resp_test.rt > testPulsesLastRT:
                    # T_before_pulses = test_pulseClock.getTime()
                    sendPulses(serial_port,'R',numTestPulses8,pulseWidthMicroseconds,testPulseFrequencyHz)
                    # T_after_pulses = test_pulseClock.getTime()
                    testPulsesLastRT = key_resp_test.rt
                    # print('test pulse total length = {}'.format(T_after_pulses-T_before_pulses))

            elif '1' in key:
                if key_resp_test.rt > testPulsesLastRT:
                    # T_before_pulses = test_pulseClock.getTime()
                    sendPulses(serial_port,'R',numTestPulses1,pulseWidthMicroseconds,testPulseFrequencyHz)
                    # T_after_pulses = test_pulseClock.getTime()
                    testPulsesLastRT = key_resp_test.rt
                    # print('test pulse total length = {}'.format(T_after_pulses-T_before_pulses))
      End Routine:
        stopPulses(serial_port)
  Routine exit
    TextComponent textExit
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = BYE!
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    CodeComponent code_exit
      Code Type = Auto->JS
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      Begin Routine:
        stopPulses(serial_port)
      End Routine:
        serial_port.close()
        core.quit()
  Routine one_min_run
    CodeComponent codeOneMinRun
      Code Type = Auto->JS
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      Begin Experiment:
        strCountdown='{}- 1:00'.format(blockCounter)
      Begin Routine:
        blockCounter = blockCounter + 1

        if doExit > 0:
            continueRoutine = False
        else:
            if stimOn:
                logging.data("1-MIN {} STIM ON".format(stim_type))
                sendPulses(serial_port,stim_type,numOneMinPulses,pulseWidthMicroseconds,oneMinPulseFrequency)
            else:
                logging.data("1-MIN STIM OFF")
      Each Frame:
        trialT=one_min_runClock.getTime()
        Tminus = 60.0 - trialT
        if Tminus < 0.0:
            continueRoutine = False
            if blockCounter == 4:
                doFirstFiveMinRun = int(1)
        mins, secs = divmod(Tminus, 60.0)
        strCountdown='block {}- {:02d}:{:04.1f}'.format(blockCounter, int(mins), secs)
      End Routine:
        keys=key_resp_one_min.keys
        if 't' in keys:
            doTestPulse=int(1)
        elif '1' in keys:
            doOneMinRun=int(1)
        elif '5' in keys:
            doFiveMinRun=int(1)
        elif 'e' in keys:
            doExit=int(1)
            stopPulses(serial_port)
        if doExit < 1:
            stopPulses(serial_port)
    TextComponent textCountdownOne
      color = lawngreen
      letterHeight = 0.1
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $strCountdown
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    TextComponent textOneMinRun
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = E: exit early
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    KeyboardComponent key_resp_one_min
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent soundOneMinStart
      sound = 440
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine start
    CodeComponent startCode
      Code Type = Auto->JS
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      Begin Experiment:
        # from psychopy import parallel
        import time
        import serial
        from datetime import datetime
        logging.data(datetime.now())
        blockCounter = int(0)

        # pulse width
        pulseWidthMicroseconds = int(200)
        # pulseWidthSeconds = pulseWidthMicroseconds / 1e6

        # test pulse settings
        testPulseFrequencyHz = 12.0
        numTestPulses8 = int(8)
        numTestPulses1 = int(1)

        # one-minute block pulse settings
        numOneMinPulses = int(600)
        oneMinPulseFrequency = 10.0
        one_min_condition_file = 'one_min_order_{}.csv'.format(session_settings['one_min_order'])

        # five-minute block pulse settings
        numFiveMinPulses = int(3600)
        fiveMinPulseFrequency = 12.0

        # open Arduino on COM port
        serial_port = serial.Serial()
        serial_port.baudrate = 115200
        port_num = int(9)
        while (not serial_port.is_open and port_num > 0):
            serial_port.port = 'COM{}'.format(port_num)
            try:
                serial_port.open()
            except:
                print('No device found at {}'.format(serial_port.port))
                port_num = port_num - 1
                continue
            print('Device found at {}'.format(serial_port.port))

        # test pulse function
        def sendPulses(port, rhythmType, numPulses, pulseWidth, pulseFrequency):
            # build serial write string
            ser_write_string = '{}x{}x{}x{}\n'.format(rhythmType, numPulses,pulseWidth,pulseFrequency)
            port.write(ser_write_string.encode('utf-8'))
            logging.data(ser_write_string.rstrip())

        # turn off stim pulses
        def stopPulses(port):
            # send a "0" to turn off stim pulses
            port.write(b'Rx0x200x10.0\n')
            logging.data("Rx0x200x10.0")
      Begin Routine:
        doTestPulse=0
        doOneMinRuns=0
        doOneMinRunReady=0
        doFirstFiveMinRun=0
        doOnOffFiveMinRuns=0
        doExit=0
      End Experiment:
        stopPulses(serial_port)
        serial_port.close()
      End Routine:
        keys=key_resp_home.keys
        if 't' in keys:
            doTestPulse=int(1)
        elif 'p' in keys:
            doOneMinRunReady=int(1)
        elif '5' in keys:
            doOnOffFiveMinRuns=int(1)
            blockCounter = 5
        elif 'e' in keys:
            doExit=int(1)
    TextComponent textHomeScreen
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        MNS stiumulation control

        t: test pulses
        p: begin protocol
        5: skip to 5-minute run
        E: exit
    KeyboardComponent key_resp_home
      allowedKeys = 't','p','5','e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine one_min_ready
    TextComponent textOneMinTimer
      color = gold
      letterHeight = 0.075
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = 1:00.0
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    TextComponent textOneMinReady
      letterHeight = 0.075
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Ready for one-minute run?

        S: start
        E: exit
    KeyboardComponent key_resp_one_min_ready
      allowedKeys = 's','e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeOneMinStart
      Code Type = Auto->JS
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      End Routine:
        keys=key_resp_one_min_ready.keys
        if 't' in keys:
            doTestPulse=int(1)
        elif '1' in keys:
            doOneMinRun=int(1)
        elif '5' in keys:
            doOnOffFiveMinRuns=int(1)
        elif 'e' in keys:
            doExit=int(1)
        elif 's' in keys:
            doOneMinRuns=int(1)
  Routine five_min_run
    CodeComponent codeFiveMinRun
      Code Type = Auto->JS
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      Begin Routine:
        blockCounter = blockCounter + 1
        strCountdown='block {}- 5:00'.format(blockCounter)

        if doExit > 0:
            continueRoutine = False

        if stimOn:
            logging.data("5-MIN {} STIM ON".format(stim_type))
            sendPulses(serial_port,stim_type,numFiveMinPulses,pulseWidthMicroseconds,fiveMinPulseFrequency)
        else:
            logging.data("5-MIN STIM OFF")
      Each Frame:
        trialT=five_min_runClock.getTime()
        Tminus = 300.0 - trialT
        if Tminus < 0.0:
            continueRoutine = False
            if blockCounter == 5:
                doOnOffFiveMinRuns = int(1)
        mins, secs = divmod(Tminus, 60.0)
        strCountdown='block {}- {:02d}:{:04.1f}'.format(blockCounter, int(mins), secs)
      End Routine:
        keys=key_resp_five_min.keys
        if 't' in keys:
            doTestPulse=int(1)
        elif '1' in keys:
            doOneMinRun=int(1)
        elif '5' in keys:
            doFiveMinRun=int(1)
        elif 'e' in keys:
            doExit=int(1)
            stopPulses(serial_port)
        if doExit < 1:
            stopPulses(serial_port)
    TextComponent textCountdownFive
      color = lawngreen
      letterHeight = 0.1
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $strCountdown
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    TextComponent textFiveMinRun
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = E: exit early
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    KeyboardComponent key_resp_five_min
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent soundFiveMinStart
      sound = 523.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine error_handling
    CodeComponent codeErrorHandling
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import data

        stringErrorHandling = ''
        errorState = False

        # session settings
        def getSessionSettings(sub_integer):
            # default empty return vals
            rhythm_group = ''
            one_min_order = ''
            # open subject info file
            settings_file = u'MNS-stim_session_settings.tsv'
            print('Reading session settings from {}...'.format(settings_file))
            all_settings = data.importConditions(settings_file)
            for row in all_settings:
                if sub_integer == row['participant']:
                    rhythm_group = row['rhythm_group']
                    one_min_order = row['one_min_order']

            if rhythm_group.isalpha() and int(one_min_order):
                # return session settings
                settings = {'rhythm_group': rhythm_group, 'one_min_order': int(one_min_order)}
                print('settings = {}'.format(settings))
                return settings
            else:
                raise Exception

        # check subject number and session number
        try:
            sub_int = int(expInfo['participant'])
        except:
            stringErrorHandling = "ERROR: participant must be an integer greater than 100"
            errorState = True
        try:
            ses_int = int(expInfo['session'])
        except:
            stringErrorHandling = "ERROR: session must be an integer greater than 0"
            errorState = True

        if sub_int < 101:
            stringErrorHandling = "ERROR: participant must be an integer greater than 100"
            errorState = True

        if ses_int < 1 or ses_int > 2:
            stringErrorHandling = "ERROR: session must be an integer, either 1 or 2"
            errorState = True

        try:
            session_settings = getSessionSettings(sub_int)
        except:
            stringErrorHandling = "ERROR: problem reading session settings"
            errorState = True

        arrhythmic = False
        if session_settings['rhythm_group'] in 'A' and ses_int == 1:
            arrhythmic = True
            stim_type = 'A'
        elif session_settings['rhythm_group'] in 'A' and ses_int == 2:
            arrhythmic = False
            stim_type = 'R'
        elif session_settings['rhythm_group'] in 'B' and ses_int == 1:
            arrhythmic = False
            stim_type = 'R'
        elif session_settings['rhythm_group'] in 'B' and ses_int == 2:
            arrhythmic = True
            stim_type = 'A'
        else:
            stringErrorHandling = "ERROR: rhythm_group must be either A or B"
            errorState = True
      Begin Routine:
        if errorState:
            pass
        else:
            continueRoutine = False
      End Routine:
        if errorState:
            print(stringErrorHandling)
            sys.exit(1)
    TextComponent textErrorHandling
      color = crimson
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = $stringErrorHandling
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Flow
  Routine error_handling
  Routine start
  LoopInitiator trialsTestPulse loopType="TrialHandler"
    loopType = random
    nReps = doTestPulse
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    Routine test_pulse
  LoopTerminator trialsTestPulse
  LoopInitiator trialsOneMinReady loopType="TrialHandler"
    loopType = random
    nReps = doOneMinRunReady
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    Routine one_min_ready
  LoopTerminator trialsOneMinReady
  LoopInitiator trialsOneMin loopType="TrialHandler"
    conditionsFile = $one_min_condition_file
    loopType = sequential
    nReps = doOneMinRuns
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    Routine one_min_run
  LoopTerminator trialsOneMin
  LoopInitiator trialsFirstFiveMin loopType="TrialHandler"
    conditions = [OrderedDict([('stimOn', 0)])]
    conditionsFile = first_five_min_condition.csv
    loopType = random
    nReps = doFirstFiveMinRun
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    Routine five_min_run
  LoopTerminator trialsFirstFiveMin
  LoopInitiator trialsFiveMinOnOff loopType="TrialHandler"
    conditionsFile = five_min_conditions.csv
    loopType = sequential
    nReps = doOnOffFiveMinRuns
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    conditions:
      [OrderedDict([('stimOn', 1)]),
      OrderedDict([('stimOn', 0)]),
      OrderedDict([('stimOn', 1)]),
      OrderedDict([('stimOn', 0)])]
    Routine five_min_run
  LoopTerminator trialsFiveMinOnOff
  LoopInitiator trialsExit loopType="TrialHandler"
    loopType = random
    nReps = doExit
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    Routine exit
  LoopTerminator trialsExit
